PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = primingemoji
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $prime
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent image_2
      image [set every repeat] = $test
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Positive", "Neutral", "Negetive"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.5
      styles = choice
      ticks = (1, 2, 3)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Admin/Desktop/emotion_research/emotionproject.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\n1.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\1.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\n2.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\2.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\n3.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\3.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\ne3.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\4.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\ne4.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\5.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\ne5.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\6.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\\p1.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\7.jpg'},
      {'prime': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172214Z-001.zip\\p2.jpg', 'test': 'C:\\Users\\Admin\\Downloads\\drive-download-20240408T172236Z-001.zip\\8.jpg'}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
    Routine trial
  LoopTerminator trials
